PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = First_try
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $File
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    ImageComponent image_2
      image [set every repeat] = $BGbase
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.5
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    ImageComponent image_3
      image [set every repeat] = $BGbase
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent up
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = /\
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    TextComponent down
      letterHeight = 0.1
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = \/
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    TextComponent left
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = <
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    TextComponent right
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = >
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    TextComponent center
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = .
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    KeyboardComponent key_resp
      allowedKeys = 'left','right','up','down','a'
      correctAns = $CorrAns
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine Instructions
    TextComponent Inst
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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      text:
        Greetings Participant

        Press enter to continue
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = bbg_bd.csv
    loopType = random
    nReps = 2
    random seed = 1
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    conditions:
      [OrderedDict([('File', 'images/bbg_bd_0.png'), ('Color_change', 254.5), ('CorrAns', 'up')]),
      OrderedDict([('File', 'images/bbg_bd_1.png'), ('Color_change', 254.0), ('CorrAns', 'left')]),
      OrderedDict([('File', 'images/bbg_bd_2.png'), ('Color_change', 253.5), ('CorrAns', 'right')]),
      OrderedDict([('File', 'images/bbg_bd_3.png'), ('Color_change', 253.0), ('CorrAns', 'right')]),
      OrderedDict([('File', 'images/bbg_bd_4.png'), ('Color_change', 252.5), ('CorrAns', 'right')]),
      OrderedDict([('File', 'images/bbg_bd_5.png'), ('Color_change', 252.0), ('CorrAns', 'down')]),
      OrderedDict([('File', 'images/bbg_bd_6.png'), ('Color_change', 251.5), ('CorrAns', 'right')]),
      OrderedDict([('File', 'images/bbg_bd_7.png'), ('Color_change', 251.0), ('CorrAns', 'left')]),
      OrderedDict([('File', 'images/bbg_bd_8.png'), ('Color_change', 250.5), ('CorrAns', 'right')]),
      OrderedDict([('File', 'images/bbg_bd_9.png'), ('Color_change', 250.0), ('CorrAns', 'left')]),
      OrderedDict([('File', 'images/bbg_bd_10.png'), ('Color_change', 249.5), ('CorrAns', 'right')]),
      OrderedDict([('File', 'images/bbg_bd_11.png'), ('Color_change', 249.0), ('CorrAns', 'left')]),
      OrderedDict([('File', 'images/bbg_bd_12.png'), ('Color_change', 248.5), ('CorrAns', 'down')]),
      OrderedDict([('File', 'images/bbg_bd_13.png'), ('Color_change', 248.0), ('CorrAns', 'up')]),
      OrderedDict([('File', 'images/bbg_bd_14.png'), ('Color_change', 247.5), ('CorrAns', 'right')]),
      OrderedDict([('File', 'images/bbg_bd_15.png'), ('Color_change', 247.0), ('CorrAns', 'right')])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
    Routine trial
  LoopTerminator trials
