PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = hue_diff
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = black
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $File
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    ImageComponent image_2
      image [set every repeat] = $BGbase
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.5
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    ImageComponent image_3
      image [set every repeat] = $BGbase
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent up
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = /\
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    TextComponent down
      letterHeight = 0.1
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = \/
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    TextComponent left
      letterHeight = 0.1
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = <
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    TextComponent right
      letterHeight = 0.1
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = >
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    TextComponent center
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 1.2
      text = 0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right','up','down','a'
      correctAns = $CorrAns
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine Instructions
    TextComponent Inst
      letterHeight = 0.03
      startVal [time (s)] = 0
      stopVal [duration (s)] = 15
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      text:
        Greetings Participant
        Please focus continuously at the center of the screen. For every pink screen, a small spot will pop up in one of the directions. If you detect a stimuli, please press the corresponding arrow key. In case you dont spot the stimuli, press 'a'. Once done, the script will stop itself. If you feel uneasy at any point, press 'Esc'. Off you go :)
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pbg_ru.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('File', 'images/pbg_ru_0.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 150.0), ('CorrAns', 'up')]),
      OrderedDict([('File', 'images/pbg_ru_1.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 151.0), ('CorrAns', 'left')]),
      OrderedDict([('File', 'images/pbg_ru_2.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 152.0), ('CorrAns', 'right')]),
      OrderedDict([('File', 'images/pbg_ru_3.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 153.0), ('CorrAns', 'down')]),
      OrderedDict([('File', 'images/pbg_ru_4.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 154.0), ('CorrAns', 'up')]),
      OrderedDict([('File', 'images/pbg_ru_5.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 155.0), ('CorrAns', 'down')]),
      OrderedDict([('File', 'images/pbg_ru_6.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 156.0), ('CorrAns', 'down')]),
      OrderedDict([('File', 'images/pbg_ru_7.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 157.0), ('CorrAns', 'right')]),
      OrderedDict([('File', 'images/pbg_ru_8.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 158.0), ('CorrAns', 'down')]),
      OrderedDict([('File', 'images/pbg_ru_9.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 159.0), ('CorrAns', 'up')]),
      OrderedDict([('File', 'images/pbg_ru_10.png'), ('BGbase', 'images/pbg_ru_0.png'), ('Color_change', 160.0), ('CorrAns', 'down')])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
    Routine trial
  LoopTerminator trials
